CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:65
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['DC', 'Ecoli: CD: 22.631, CH:17.716, off: 18.416', 'CH*1.2774, off*1.2289']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CD")
    Name to assign these images:CD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH")
    Name to assign these images:CH
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "OFF")
    Name to assign these images:off
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CY3")
    Name to assign these images:Cy3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Crop images to best illuminated area']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enabled:False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
    Select the input image:CD0
    Name the output image:CD
    Select the cropping shape:Rectangle
    Select the cropping method:Mouse
    Apply which cycle's cropping pattern?:Every
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    Remove empty rows and columns?:No
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
Crop:[module_num:6|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enabled:False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
    Select the input image:CH0
    Name the output image:CH
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:No
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    Select the image with a cropping mask:CD
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
Crop:[module_num:7|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enabled:False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
    Select the input image:off0
    Name the output image:off
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:No
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    Select the image with a cropping mask:CD
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
Crop:[module_num:8|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enabled:False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
    Select the input image:Cy30
    Name the output image:Cy3
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:No
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    Select the image with a cropping mask:CD
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
Crop:[module_num:9|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enabled:False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
    Select the input image:Cy50
    Name the output image:Cy5
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:No
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    Select the image with a cropping mask:CD
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:CD
    Name the output image:IllumCD0
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:11|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
    Select the input image:IllumCD0
    Name the output image:IllumCD1
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:No

RescaleIntensity:[module_num:12|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
    Select the input image:IllumCD1
    Name the output image:IllumCD2
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.9,1.1
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
CorrectIlluminationApply:[module_num:13|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
    Select the input image:CD
    Name the output image:CD_IlluCorr
    Select the illumination function:IllumCD2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

CorrectIlluminationCalculate:[module_num:14|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
    Select the input image:off
    Name the output image:IllumOff0
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:15|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
    Select the input image:IllumOff0
    Name the output image:IllumOff1
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:No

RescaleIntensity:[module_num:16|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
    Select the input image:IllumOff1
    Name the output image:IllumOff2
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.9,1.1
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
CorrectIlluminationApply:[module_num:17|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
    Select the input image:off
    Name the output image:Off_IlluCorr
    Select the illumination function:IllumOff2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

CorrectIlluminationCalculate:[module_num:18|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
    Select the input image:CH
    Name the output image:IllumCH0
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:19|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
    Select the input image:IllumCH0
    Name the output image:IllumCH1
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:No

RescaleIntensity:[module_num:20|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
    Select the input image:IllumCH1
    Name the output image:IllumCH2
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.9,1.1
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
CorrectIlluminationApply:[module_num:21|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
    Select the input image:CH
    Name the output image:CH_IlluCorr
    Select the illumination function:IllumCH2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

CorrectIlluminationCalculate:[module_num:22|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
    Select the input image:Cy3
    Name the output image:IllumCy30
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:23|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
    Select the input image:Cy3
    Name the output image:IllumCy31
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:No

RescaleIntensity:[module_num:24|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
    Select the input image:IllumCy31
    Name the output image:IllumCy32
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.95,1.05
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
CorrectIlluminationApply:[module_num:25|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
    Select the input image:Cy3
    Name the output image:Cy3_IlluCorr
    Select the illumination function:IllumCy32
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

CorrectIlluminationCalculate:[module_num:26|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enabled:False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
    Select the input image:Cy5
    Name the output image:IllumCy50
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:27|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enabled:False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
    Select the input image:IllumCy50
    Name the output image:IllumCy51
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:No

RescaleIntensity:[module_num:28|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enabled:False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
    Select the input image:IllumCy51
    Name the output image:IllumCy52
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.95,1.05
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
CorrectIlluminationApply:[module_num:29|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enabled:False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
    Select the input image:Cy5
    Name the output image:Cy5_IlluCorr
    Select the illumination function:IllumCy52
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

IdentifyObjectsManually:[module_num:30|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notes:['Select and remove the background for', '1. %CD calculation', '2. TPF and SRS image alignment']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
    Select the input image:CH_IlluCorr
    Name the objects to be identified:SRS_BG

IdentifyObjectsManually:[module_num:31|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
    Select the input image:Cy3_IlluCorr
    Name the objects to be identified:Cy3_BG

IdentifyObjectsManually:[module_num:32|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enabled:False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
    Select the input image:Cy5_IlluCorr
    Name the objects to be identified:Cy5_BG

MeasureImageIntensity:[module_num:33|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
    Select images to measure:CD_IlluCorr, CH_IlluCorr, Off_IlluCorr
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:SRS_BG
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:34|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
    Select images to measure:Cy3_IlluCorr
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cy3_BG
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:35|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enabled:False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
    Select images to measure:Cy5_IlluCorr
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cy5_BG
    Calculate custom percentiles:No
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
ImageMath:[module_num:36|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:0.12289
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:off_bg_removed
    Image or measurement?:Image
    Select the first image:Off_IlluCorr
    Multiply the first image by:10
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    Image or measurement?:Measurement
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    Multiply the second image by:10
    Measurement:Intensity_MeanIntensity_Off_IlluCorr_SRS_BG

ImageMath:[module_num:37|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:0.1
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CD_bg_removed
    Image or measurement?:Image
    Select the first image:CD_IlluCorr
    Multiply the first image by:10
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    Image or measurement?:Measurement
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    Multiply the second image by:10
    Measurement:Intensity_MeanIntensity_CD_IlluCorr_SRS_BG

ImageMath:[module_num:38|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:0.12774
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CH_bg_removed
    Image or measurement?:Image
    Select the first image:CH_IlluCorr
    Multiply the first image by:10
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    Image or measurement?:Measurement
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    Multiply the second image by:10
    Measurement:Intensity_MeanIntensity_CH_IlluCorr_SRS_BG

ImageMath:[module_num:39|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:0.001
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cy3_bg_removed
    Image or measurement?:Image
    Select the first image:Cy3_IlluCorr
    Multiply the first image by:1
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_Cy3_IlluCorr_Cy3_BG

ImageMath:[module_num:40|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cy5_bg_removed
    Image or measurement?:Image
    Select the first image:Cy5_IlluCorr
    Multiply the first image by:10
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    Image or measurement?:Measurement
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    Multiply the second image by:10
    Measurement:Intensity_MeanIntensity_Cy5_IlluCorr_Cy5_BG

Align:[module_num:41|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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
    Select the first input image:CH_bg_removed
    Name the first output image:CH_aligned0
    Select the second input image:Cy3_bg_removed
    Name the second output image:Cy3_aligned0

Align:[module_num:42|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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
    Select the first input image:CH_aligned0
    Name the first output image:CH_aligned1
    Select the second input image:CD_bg_removed
    Name the second output image:CD_aligned
    Select the additional image:off_bg_removed
    Name the output image:off_aligned
    Select how the alignment is to be applied:Similarly

Align:[module_num:43|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notes:['Ensure fluorescence has the same size as SRS']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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
    Select the first input image:CH_aligned1
    Name the first output image:CH_aligned
    Select the second input image:Cy3_aligned0
    Name the second output image:Cy3_aligned

Smooth:[module_num:44|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enabled:False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
    Select the input image:CH_pure_Mask
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7
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
ImageMath:[module_num:45|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CH_aligned_log
    Image or measurement?:Image
    Select the first image:CH_aligned
    Multiply the first image by:1
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    Image or measurement?:Measurement
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    Measurement:Intensity_MeanIntensity_CH_IlluCorr_SRS_BG

EnhanceEdges:[module_num:46|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
    Select the input image:CH_aligned_log
    Name the output image:CH_EdgedImage
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
ImageMath:[module_num:47|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CH_Mask_EdgeEnhanced
    Image or measurement?:Image
    Select the first image:CH_aligned
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:CH_EdgedImage
    Multiply the second image by:15
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
ImageMath:[module_num:48|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cy3_aligned_rescaled
    Image or measurement?:Image
    Select the first image:Cy3_aligned
    Multiply the first image by:1
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:49|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enabled:False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
    Select the input image:Cy3_aligned
    Name the output image:Cy3_aligned_rescaled
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0,1
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
IdentifyPrimaryObjects:[module_num:50|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
    Select the input image:Cy3_aligned_rescaled
    Name the primary objects to be identified:Cy3_Bacteria
    Typical diameter of objects, in pixel units (Min,Max):5,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:6
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:51|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
    Select the input image:Cy3_aligned_rescaled
    Name the primary objects to be identified:Cy3_Bacteria_filter_seg
    Typical diameter of objects, in pixel units (Min,Max):5,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
ImageMath:[module_num:52|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:0.3
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CH_Mask_EdgeEnhanced_rescaled
    Image or measurement?:Image
    Select the first image:CH_Mask_EdgeEnhanced
    Multiply the first image by:1
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:53|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enabled:False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
    Select the input image:CH_Mask_EdgeEnhanced
    Name the output image:CH_Mask_EdgeEnhanced_rescaled
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0,2
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
IdentifyPrimaryObjects:[module_num:54|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notes:['Identify different bacteria to create mask from FISH results']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
    Select the input image:CH_Mask_EdgeEnhanced_rescaled
    Name the primary objects to be identified:CH_Bacteria
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:7
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.15
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
FilterObjects:[module_num:55|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
    Select the objects to filter:CH_Bacteria
    Name the output objects:CH_reject_Cy3_1
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cy3_Bacteria_filter_seg
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RestObjects_1
    Select the measurement to filter by:Number_Object_Number
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
FilterObjects:[module_num:56|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
    Select the objects to filter:RestObjects_1
    Name the output objects:CH_reject_Cy3_2
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cy3_Bacteria_filter_seg
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RestObjects_2
    Select the measurement to filter by:Number_Object_Number
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
FilterObjects:[module_num:57|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
    Select the objects to filter:RestObjects_2
    Name the output objects:CH_reject_Cy3_3
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cy3_Bacteria_filter_seg
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RestObjects_3
    Select the measurement to filter by:Number_Object_Number
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
FilterObjects:[module_num:58|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
    Select the objects to filter:RestObjects_3
    Name the output objects:CH_reject_Cy3_4
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cy3_Bacteria_filter_seg
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RestObjects_4
    Select the measurement to filter by:Number_Object_Number
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
FilterObjects:[module_num:59|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enabled:False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
    Select the objects to filter:CH_reject_Cy3_4
    Name the output objects:CH_reject_Cy3_5
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cy3_Bacteria_filter_seg
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RestObjects_5
    Select the measurement to filter by:Number_Object_Number
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
CombineObjects:[module_num:60|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
    Select initial object set:CH_reject_Cy3_1
    Select object set to combine:CH_reject_Cy3_2
    Select how to handle overlapping objects:Merge
    Name the combined object set:CH_reject_Cy3_cb1

CombineObjects:[module_num:61|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
    Select initial object set:CH_reject_Cy3_cb1
    Select object set to combine:CH_reject_Cy3_3
    Select how to handle overlapping objects:Merge
    Name the combined object set:CH_reject_Cy3_cb2

CombineObjects:[module_num:62|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
    Select initial object set:CH_reject_Cy3_cb2
    Select object set to combine:CH_reject_Cy3_4
    Select how to handle overlapping objects:Merge
    Name the combined object set:CH_reject_Cy3

MaskObjects:[module_num:63|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
    Select objects to be masked:CH_Bacteria
    Name the masked objects:CH_Bacteria_noFISH
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CH_reject_Cy3
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:64|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
    Select images to measure:CD_aligned, CH_aligned, off_aligned
    Select objects to measure:CH_Bacteria_noFISH, Cy3_Bacteria

ExportToSpreadsheet:[module_num:65|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/Local Data/20220922-25 SRS-FISH-drug_final/Tiff_Day22_BIF_1F_meta_partial/Statistical
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:CH_Bacteria_noFISH|Intensity_MeanIntensity_CD_aligned,CH_Bacteria_noFISH|Intensity_MeanIntensity_CH_aligned,CH_Bacteria_noFISH|Intensity_MeanIntensity_off_aligned,Cy3_Bacteria|Intensity_MeanIntensity_off_aligned,Cy3_Bacteria|Intensity_MeanIntensity_CH_aligned,Cy3_Bacteria|Intensity_MeanIntensity_CD_aligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Reject_BIF_AP7_CDratio_Cy3nCHmasked
    Overwrite existing files without warning?:No
    Data to export:Cy3_Bacteria
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CH_Bacteria_noFISH
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
