CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:87
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['For 1 FISH probes drug distribution intensity measurement']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CD_Y")
    Name to assign these images:Ey0
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH")
    Name to assign these images:CH0
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CY3")
    Name to assign these images:Cy30
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Crop images to best illuminated area']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
    Select the input image:CH0
    Name the output image:CH
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:1,298
    Top and bottom rectangle positions:1,298
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    Remove empty rows and columns?:No
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
Crop:[module_num:6|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
    Select the input image:Cy30
    Name the output image:Cy3
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:No
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    Select the image with a cropping mask:CH
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
Crop:[module_num:7|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enabled:False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
    Select the input image:Cy50
    Name the output image:Cy5
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:No
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    Select the image with a cropping mask:CH
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
Crop:[module_num:8|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enabled:False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
    Select the input image:Ex0
    Name the output image:Ex
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:No
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    Select the image with a cropping mask:CH
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
Crop:[module_num:9|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
    Select the input image:Ey0
    Name the output image:Ey
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:No
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    Select the image with a cropping mask:CH
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
Crop:[module_num:10|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enabled:False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
    Select the input image:Trans0
    Name the output image:Trans
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:No
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    Select the image with a cropping mask:CH
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
CorrectIlluminationCalculate:[module_num:11|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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enabled:False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
    Select the input image:Ex
    Name the output image:IllumEx0
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:12|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enabled:False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
    Select the input image:IllumEx0
    Name the output image:IllumEx1
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:No

RescaleIntensity:[module_num:13|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enabled:False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
    Select the input image:IllumEx0
    Name the output image:IllumEx2
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.9,1.1
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
CorrectIlluminationApply:[module_num:14|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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enabled:False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
    Select the input image:Ex
    Name the output image:Ex_IlluCorr
    Select the illumination function:IllumEx2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

CorrectIlluminationCalculate:[module_num:15|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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
    Select the input image:Ey
    Name the output image:IllumEy0
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:16|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enabled:False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
    Select the input image:IllumEy0
    Name the output image:IllumEy1
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:Yes

RescaleIntensity:[module_num:17|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
    Select the input image:IllumEy0
    Name the output image:IllumEy2
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.9,1.1
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
CorrectIlluminationApply:[module_num:18|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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
    Select the input image:Ey
    Name the output image:Ey_IlluCorr
    Select the illumination function:IllumEy2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

CorrectIlluminationCalculate:[module_num:19|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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
    Select the input image:CH
    Name the output image:IllumCH0
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:20|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enabled:False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
    Select the input image:IllumCH0
    Name the output image:IllumCH1
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:No

RescaleIntensity:[module_num:21|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
    Select the input image:IllumCH0
    Name the output image:IllumCH2
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.9,1.1
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
CorrectIlluminationApply:[module_num:22|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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
    Select the input image:CH
    Name the output image:CH_IlluCorr
    Select the illumination function:IllumCH2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

CorrectIlluminationCalculate:[module_num:23|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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
    Select the input image:Cy3
    Name the output image:IllumCy30
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:24|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enabled:False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
    Select the input image:IllumCy30
    Name the output image:IllumCy31
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:No

RescaleIntensity:[module_num:25|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
    Select the input image:IllumCy30
    Name the output image:IllumCy32
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.9,1.1
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
CorrectIlluminationApply:[module_num:26|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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
    Select the input image:Cy3
    Name the output image:Cy3_IlluCorr
    Select the illumination function:IllumCy32
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

CorrectIlluminationCalculate:[module_num:27|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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enabled:False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
    Select the input image:Cy5
    Name the output image:IllumCy50
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:28|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enabled:False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
    Select the input image:IllumCy50
    Name the output image:IllumCy51
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:No

RescaleIntensity:[module_num:29|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enabled:False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
    Select the input image:IllumCy50
    Name the output image:IllumCy52
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.9,1.1
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
CorrectIlluminationApply:[module_num:30|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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enabled:False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
    Select the input image:Cy5
    Name the output image:Cy5_IlluCorr
    Select the illumination function:IllumCy52
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

CorrectIlluminationCalculate:[module_num:31|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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enabled:False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
    Select the input image:Trans
    Name the output image:IllumTrans0
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:Median
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Smooth:[module_num:32|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enabled:False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
    Select the input image:IllumTrans0
    Name the output image:IllumTrans1
    Select smoothing method:Fit Polynomial
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    Clip intensities to 0 and 1?:No

RescaleIntensity:[module_num:33|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enabled:False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
    Select the input image:IllumTrans1
    Name the output image:IllumTrans2
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.95,1.05
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
CorrectIlluminationApply:[module_num:34|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notes:['When the min bg intensity < 0, the smooth fitting may fail and makes the bg pixelized']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enabled:False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
    Select the input image:Trans
    Name the output image:Trans_IlluCorr
    Select the illumination function:IllumTrans2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

IdentifyObjectsManually:[module_num:35|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enabled:False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
    Select the input image:Cy5_IlluCorr
    Name the objects to be identified:Cy5_BG

IdentifyObjectsManually:[module_num:36|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enabled:False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
    Select the input image:Cy5_IlluCorr
    Name the objects to be identified:Cy5_BG

IdentifyObjectsManually:[module_num:37|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notes:['Select and remove the background for', '1. %CD calculation', '2. TPF and SRS image alignment']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
    Select the input image:CH_IlluCorr
    Name the objects to be identified:SRS_BG

IdentifyObjectsManually:[module_num:38|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
    Select the input image:Cy3_IlluCorr
    Name the objects to be identified:Cy3_BG

IdentifyObjectsManually:[module_num:39|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enabled:False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
    Select the input image:Cy5_IlluCorr
    Name the objects to be identified:Cy5_BG

MeasureImageIntensity:[module_num:40|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
    Select images to measure:CH_IlluCorr, Ey_IlluCorr
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:SRS_BG
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:41|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
    Select images to measure:Cy3_IlluCorr
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cy3_BG
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:42|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enabled:False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
    Select images to measure:Cy5_IlluCorr
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cy5_BG
    Calculate custom percentiles:No
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
ImageMath:[module_num:43|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Ex_bg_removed
    Image or measurement?:Image
    Select the first image:Ex_IlluCorr
    Multiply the first image by:1
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_Ex_IlluCorr_SRS_BG

ImageMath:[module_num:44|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Ey_bg_removed
    Image or measurement?:Image
    Select the first image:Ey_IlluCorr
    Multiply the first image by:1
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_Ey_IlluCorr_SRS_BG

ImageMath:[module_num:45|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CH_bg_removed
    Image or measurement?:Image
    Select the first image:CH_IlluCorr
    Multiply the first image by:1
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_CH_IlluCorr_SRS_BG

ImageMath:[module_num:46|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:0.001
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cy3_bg_removed
    Image or measurement?:Image
    Select the first image:Cy3_IlluCorr
    Multiply the first image by:1
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_Cy3_IlluCorr_Cy3_BG

ImageMath:[module_num:47|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:0.001
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cy5_bg_removed
    Image or measurement?:Image
    Select the first image:Cy5_IlluCorr
    Multiply the first image by:1
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    Image or measurement?:Measurement
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    Multiply the second image by:1
    Measurement:Intensity_MeanIntensity_Cy5_IlluCorr_Cy5_BG

ImageMath:[module_num:48|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enabled:False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
    Operation:None
    Raise the power of the result by:2
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ExSq
    Image or measurement?:Image
    Select the first image:Ex_bg_removed
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:49|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enabled:False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
    Operation:None
    Raise the power of the result by:2
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:EySq
    Image or measurement?:Image
    Select the first image:Ey_bg_removed
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:50|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enabled:False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
    Operation:Add
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.25
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ExEySqSum
    Image or measurement?:Image
    Select the first image:ExSq
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EySq
    Multiply the second image by:1
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
ImageMath:[module_num:51|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enabled:False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
    Operation:Divide
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Zeta
    Image or measurement?:Image
    Select the first image:EySq
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ExEySqSum
    Multiply the second image by:1.0
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
ImageMath:[module_num:52|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cy5_bg_removed
    Image or measurement?:Image
    Select the first image:Cy5_IlluCorr
    Multiply the first image by:10
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    Image or measurement?:Measurement
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    Multiply the second image by:10
    Measurement:Intensity_MeanIntensity_Cy5_IlluCorr_Cy5_BG

ImageMath:[module_num:53|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CHbare
    Image or measurement?:Image
    Select the first image:CH_bg_removed
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:off_bg_removed
    Multiply the second image by:1.0
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
EnhanceEdges:[module_num:54|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enabled:False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
    Select the input image:CH_aligned
    Name the output image:CH_EdgedImage
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
ImageMath:[module_num:55|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CH_Mask_EdgeEnhanced
    Image or measurement?:Image
    Select the first image:CH_aligned
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:CH_EdgedImage
    Multiply the second image by:5
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
Align:[module_num:56|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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
    Select the first input image:CH_bg_removed
    Name the first output image:CH_aligned0
    Select the second input image:Ey_bg_removed
    Name the second output image:Ey_aligned0

Align:[module_num:57|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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
    Select the first input image:CH_aligned0
    Name the first output image:CH_aligned1
    Select the second input image:Cy3_bg_removed
    Name the second output image:Cy3_aligned

Align:[module_num:58|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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
    Select the first input image:CH_aligned1
    Name the first output image:CH_aligned
    Select the second input image:Ey_aligned0
    Name the second output image:Ey_aligned

Align:[module_num:59|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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
    Select the first input image:CH_aligned2
    Name the first output image:CH_aligned3
    Select the second input image:Cy3_aligned0
    Name the second output image:Cy3_aligned
    Select the additional image:Trans_aligned0
    Name the output image:Trans_aligned
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cy5_aligned0
    Name the output image:Cy5_aligned
    Select how the alignment is to be applied:Similarly

Align:[module_num:60|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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
    Select the first input image:CH_aligned3
    Name the first output image:CH_aligned
    Select the second input image:Ey_aligned1
    Name the second output image:Ey_aligned
    Select the additional image:Ex_aligned1
    Name the output image:Ex_aligned
    Select how the alignment is to be applied:Similarly
    Select the additional image:Zeta_aligned1
    Name the output image:Zeta_aligned
    Select how the alignment is to be applied:Similarly

ImageMath:[module_num:61|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CH_aligned_log
    Image or measurement?:Image
    Select the first image:CH_aligned
    Multiply the first image by:1
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    Image or measurement?:Measurement
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    Measurement:Intensity_MeanIntensity_CH_IlluCorr_SRS_BG

EnhanceEdges:[module_num:62|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
    Select the input image:CH_aligned_log
    Name the output image:CH_edge
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
ImageMath:[module_num:63|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CH_edge_enhanced
    Image or measurement?:Image
    Select the first image:CH_aligned_log
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CH_edge
    Multiply the second image by:7
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
EnhanceEdges:[module_num:64|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
    Select the input image:Cy3_aligned
    Name the output image:Cy3_edge
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
ImageMath:[module_num:65|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cy3_edge_enhanced
    Image or measurement?:Image
    Select the first image:Cy3_aligned
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cy3_edge
    Multiply the second image by:10
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
EnhanceEdges:[module_num:66|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enabled:False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
    Select the input image:Cy5_aligned
    Name the output image:Cy5_edge
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
ImageMath:[module_num:67|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cy5_edge_enhanced
    Image or measurement?:Image
    Select the first image:Cy5_aligned
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cy5_edge
    Multiply the second image by:10
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
IdentifyPrimaryObjects:[module_num:68|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
    Select the input image:Cy3_edge_enhanced
    Name the primary objects to be identified:Cy3_Bacteria
    Typical diameter of objects, in pixel units (Min,Max):4,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:7
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:69|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enabled:False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
    Select the input image:Cy5_edge_enhanced
    Name the primary objects to be identified:Cy5_Bacteria
    Typical diameter of objects, in pixel units (Min,Max):4,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:7
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:70|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
    Select the input image:Cy3_edge_enhanced
    Name the primary objects to be identified:Cy3_Bacteria_frac
    Typical diameter of objects, in pixel units (Min,Max):4,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:71|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enabled:False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
    Select the input image:Cy5_edge_enhanced
    Name the primary objects to be identified:Cy5_Bacteria_frac
    Typical diameter of objects, in pixel units (Min,Max):4,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:72|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enabled:False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
    Select the input objects:Cy3_Bacteria
    Name the output image:Cy3_Mask
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:73|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enabled:False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
    Select the input objects:Cy5_Bacteria
    Name the output image:Cy5_Mask
    Select the color format:uint16
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
CombineObjects:[module_num:74|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enabled:False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
    Select initial object set:Cy3_Bacteria_frac
    Select object set to combine:Cy5_Bacteria_frac
    Select how to handle overlapping objects:Merge
    Name the combined object set:FISH_Bacteria

ConvertObjectsToImage:[module_num:75|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enabled:False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
    Select the input objects:FISH_Bacteria
    Name the output image:FISH_Mask
    Select the color format:uint16
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
IdentifyPrimaryObjects:[module_num:76|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
    Select the input image:CH_edge_enhanced
    Name the primary objects to be identified:CH_Bacteria_whole
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:7
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.18
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
MaskObjects:[module_num:77|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
    Select objects to be masked:CH_Bacteria_whole
    Name the masked objects:CH_Bacteria
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cy3_Bacteria_frac
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:78|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
    Select images to measure:Ey_aligned
    Select objects to measure:CH_Bacteria, Cy3_Bacteria

ExportToSpreadsheet:[module_num:79|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/Local Data/20220723 Metabolism n Drug New FISH probes/Tiff_Drug/Statistics
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cy3_Bacteria|Intensity_MeanIntensity_Ey_aligned,CH_Bacteria|Intensity_MeanIntensity_Ey_aligned
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:BU_AP13_Drug_Intensity_redo
    Overwrite existing files without warning?:No
    Data to export:CH_Bacteria
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cy3_Bacteria
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

ConvertObjectsToImage:[module_num:80|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enabled:False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
    Select the input objects:CH_Bacteria
    Name the output image:CH_Mask
    Select the color format:uint16
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
MaskImage:[module_num:81|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enabled:False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
    Select the input image:Zeta_aligned
    Name the output image:Zeta_aligned_CH_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CH_Mask
    Invert the mask?:No

MaskImage:[module_num:82|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enabled:False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
    Select the input image:Zeta_aligned
    Name the output image:Zeta_aligned_FISH_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:FISH_Mask
    Invert the mask?:No

MaskImage:[module_num:83|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enabled:False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
    Select the input image:Ey_aligned
    Name the output image:Ey_aligned_FISH_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:FISH_Mask
    Invert the mask?:No

MaskImage:[module_num:84|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enabled:False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
    Select the input image:Ey_aligned
    Name the output image:Ey_aligned_CH_masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CH_Mask
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:85|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enabled:False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
    Select the input image:Cy5_aligned
    Name the primary objects to be identified:Cy5_Bacteria
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.06
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
IdentifyPrimaryObjects:[module_num:86|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notes:['Identify different bacteria to create mask from FISH results']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enabled:False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
    Select the input image:CH_Mask_EdgeEnhanced
    Name the primary objects to be identified:CH_Bacteria
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.2
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
ConvertObjectsToImage:[module_num:87|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enabled:False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
    Select the input objects:Cy5_Bacteria
    Name the output image:Cy5_Mask
    Select the color format:Binary (black & white)
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